var chswon%:=45, chswoff%:=46, chGM%:=4, chIP%:=5, chBF%:=6, chVL%:=7, chSt%:=8, chTA%:=9, chGs%:=10, chGr%:=11; 
var sw, stt, ston, swon, swon2, swoff, cp, swdur, stdur, nswdur, nstdur, ncp, I%, II%, n%, swstep, ststep, GM, IP, BF, St, VL, TA, Gs, Gr;

n%:=count(chswon%, cursor(1), cursor(2))-1;                      ' gets the number of cycles
swon:=Nexttime(chswon%, cursor(1));


For I% := 1 to n% do
    swon:=Nexttime(chswon%, swon);
    swoff:=Nexttime(chswoff%, swon);
    swon2:=Nexttime(chswon%, swon);
    
    swdur:= swoff-swon;
    stdur:= swon2-swoff;
    cp:=swon2-swon;
    
    swstep:=swdur/100;
    ststep:=stdur/100;
    
    For II%:=0 to 99 do
    sw:=swon+(II%*swstep);
        GM:=ChanValue(chGM%, sw);
        Ip:=ChanValue(chIp%, sw);
        BF:=ChanValue(chBF%, sw);
        St:=ChanValue(chSt%, sw);
        VL:=ChanValue(chVL%, sw);
        TA:=ChanValue(chTA%, sw);
        Gs:=ChanValue(chGs%, sw);
        Gr:=ChanValue(chGr%, sw);
        Printlog(GM,"	", Ip, "	", BF, "	", St, "	", VL, "	", TA, "	", Gs,"	", Gr);
    next;
    
    For II%:=0 to 99 do
    stt:=swoff+(II%*ststep);
        GM:=ChanValue(chGM%, stt);
        Ip:=ChanValue(chIp%, stt);
        BF:=ChanValue(chBF%, stt);
        St:=ChanValue(chSt%, stt);
        VL:=ChanValue(chVL%, stt);
        TA:=ChanValue(chTA%, stt);
        Gs:=ChanValue(chGs%, stt);
        Gr:=ChanValue(chGr%, stt);
        Printlog(GM,"	", Ip, "	", BF, "	", St, "	", VL, "	", TA, "	", Gs,"	", Gr);
    next;
    
next;